OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)
Comment
  Python-modified lua script
Comment
  - Acquisition Server must of course be in acquiring state
  - drift correction in acquisition server should be DISABLED
  - remember to check impedances every time
  - do NOT move AS or Designer windows during recording
Comment
  2-second recording for 'prepare articulators'
  5-second recording for 4 other stages (above)

Timeline generator => #0
  Lua Script = C:/stims/experiment-timeline.lua
-> Display cue image
  Display images in full screen = true
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/stims/images/Date.jpg
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = C:/stims/images/Goose.jpg
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = C:/stims/images/Spruce.jpg
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = C:/stims/images/Knight.jpg
  Stimulation 4 = OVTK_StimulationId_Label_04
  Cue Image 5 = C:/stims/images/Juice.jpg
  Stimulation 5 = OVTK_StimulationId_Label_05
  Cue Image 6 = C:/stims/images/Moose.jpg
  Stimulation 6 = OVTK_StimulationId_Label_06
  Cue Image 7 = C:/stims/images/Night.jpg
  Stimulation 7 = OVTK_StimulationId_Label_07
  Cue Image 8 = C:/stims/images/Queen.jpg
  Stimulation 8 = OVTK_StimulationId_Label_08
  Cue Image 9 = C:/stims/images/Berry.jpg
  Stimulation 9 = OVTK_StimulationId_Label_09
  Cue Image 10 = C:/stims/images/Hedgehog.jpg
  Stimulation 10 = OVTK_StimulationId_Label_0A
  Cue Image 11 = C:/stims/images/Water.jpg
  Stimulation 11 = OVTK_StimulationId_Label_0B
  Cue Image 12 = C:/stims/images/Daughter.jpg
  Stimulation 12 = OVTK_StimulationId_Label_0C
  Cue Image 13 = C:/stims/images/Gooseberry.jpg
  Stimulation 13 = OVTK_StimulationId_Label_0D
  Cue Image 14 = C:/stims/images/Waterfowl.jpg
  Stimulation 14 = OVTK_StimulationId_Label_0E
  Cue Image 15 = C:/stims/images/Wilderness.jpg
  Stimulation 15 = OVTK_StimulationId_Label_0F
  Cue Image 16 = C:/stims/images/Relative.jpg
  Stimulation 16 = OVTK_StimulationId_Label_10
  Cue Image 17 = C:/stims/images/Watermelon.jpg
  Stimulation 17 = OVTK_StimulationId_Label_11
  Cue Image 18 = C:/stims/images/Caterpillar.jpg
  Stimulation 18 = OVTK_StimulationId_Label_12
  Cue Image 19 = C:/stims/images/Environment.jpg
  Stimulation 19 = OVTK_StimulationId_Label_13
  Cue Image 20 = C:/stims/images/Ambassador.jpg
  Stimulation 20 = OVTK_StimulationId_Label_14
  Cue Image 21 = C:/stims/imgs/v.png
  Stimulation 21 = OVTK_StimulationId_Label_15
  Cue Image 22 = C:/stims/imgs/w.png
  Stimulation 22 = OVTK_StimulationId_Label_16
  Cue Image 23 = C:/stims/imgs/x.png
  Stimulation 23 = OVTK_StimulationId_Label_17
  Cue Image 24 = C:/stims/imgs/z.png
  Stimulation 24 = OVTK_StimulationId_Label_18
  Cue Image 25 = C:/stims/imgs/zh.png
  Stimulation 25 = OVTK_StimulationId_Label_19
  Cue Image 26 = C:/stims/imgs/bath.png
  Stimulation 26 = OVTK_StimulationId_Label_0B
  Cue Image 27 = C:/stims/imgs/comma.png
  Stimulation 27 = OVTK_StimulationId_Label_1B
  Cue Image 28 = C:/stims/imgs/dress.png
  Stimulation 28 = OVTK_StimulationId_Label_1C
  Cue Image 29 = C:/stims/imgs/fleece.png
  Stimulation 29 = OVTK_StimulationId_Label_1D
  Cue Image 30 = C:/stims/imgs/foot.png
  Stimulation 30 = OVTK_StimulationId_Label_1E
  Cue Image 31 = C:/stims/imgs/goose.png
  Stimulation 31 = OVTK_StimulationId_Label_1F
  Cue Image 32 = C:/stims/imgs/kit.png
  Stimulation 32 = OVTK_StimulationId_Number_00
  Cue Image 33 = C:/stims/imgs/lot.png
  Stimulation 33 = OVTK_StimulationId_Number_01
  Cue Image 34 = C:/stims/imgs/think_of_speaking.png
  Stimulation 34 = OVTK_GDF_Feedback_Discrete
  Cue Image 35 = C:/stims/imgs/thought.png
  Stimulation 35 = OVTK_StimulationId_Number_03
  Cue Image 36 = C:/stims/imgs/trap.png
  Stimulation 36 = OVTK_StimulationId_Number_04
  Cue Image 37 = C:/stims/imgs/prepare_articulators.png
  Stimulation 37 = OVTK_GDF_Tongue_Movement
  Cue Image 38 = C:/stims/imgs/think_of_speaking.png
  Stimulation 38 = OVTK_GDF_Feedback_Continuous
  Cue Image 39 = C:/stims/images/speaking.png
  Stimulation 39 = OVTK_GDF_Tongue
  Cue Image 40 = C:/stims/imgs/rest.png
  Stimulation 40 = OVTK_StimulationId_RestStart
  Cue Image 41 = C:/stims/images/beep.png
  Stimulation 41 = OVTK_GDF_Beep
#0 -> Run Command
  Stimulation 1 = OVTK_StimulationId_Label_31
  Command 1 = cd "C:\Program Files\VideoLAN\VLC" vlc C:\stims\mouth\Date.mp4 --fullscreen vlc://quit
  Stimulation 2 = OVTK_StimulationId_Label_32
  Command 2 = cd "C:\Program Files\VideoLAN\VLC" vlc C:\stims\mouth\Goose.mp4 --fullscreen vlc://quit
  Stimulation 3 = OVTK_StimulationId_Label_33
  Command 3 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Spruce.mp4 --fullscreen vlc://quit
  Stimulation 4 = OVTK_StimulationId_Label_34
  Command 4 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Knight.mp4 --fullscreen vlc://quit
  Stimulation 5 = OVTK_StimulationId_Label_35
  Command 5 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Juice.mp4 --fullscreen vlc://quit
  Stimulation 6 = OVTK_StimulationId_Label_36
  Command 6 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Moose.mp4 --fullscreen vlc://quit
  Stimulation 7 = OVTK_StimulationId_Label_37
  Command 7 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Night.mp4 --fullscreen vlc://quit
  Stimulation 8 = OVTK_StimulationId_Label_38
  Command 8 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Queen.mp4 --fullscreen vlc://quit
  Stimulation 9 = OVTK_StimulationId_Label_39
  Command 9 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Berry.mp4 --fullscreen vlc://quit
  Stimulation 10 = OVTK_StimulationId_Label_3A
  Command 10 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\HedgeHog.mp4 --fullscreen vlc://quit
  Stimulation 11 = OVTK_StimulationId_Label_3B
  Command 11 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Water.mp4 --fullscreen vlc://quit
  Stimulation 12 = OVTK_StimulationId_Label_3C
  Command 12 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Daughter.mp4 --fullscreen vlc://quit
  Stimulation 13 = OVTK_StimulationId_Label_3D
  Command 13 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Gooseberry.mp4 --fullscreen vlc://quit
  Stimulation 14 = OVTK_StimulationId_Label_3E
  Command 14 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Waterfowl.mp4 --fullscreen vlc://quit
  Stimulation 15 = OVTK_StimulationId_Label_3F
  Command 15 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Wilderness.mp4 --fullscreen vlc://quit
  Stimulation 16 = OVTK_StimulationId_Label_40
  Command 16 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Relative.mp4 --fullscreen vlc://quit
  Stimulation 17 = OVTK_StimulationId_Label_41
  Command 17 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Watermelon.mp4 --fullscreen vlc://quit
  Stimulation 18 = OVTK_StimulationId_Label_42
  Command 18 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Caterpillar.mp4 --fullscreen vlc://quit
  Stimulation 19 = OVTK_StimulationId_Label_43
  Command 19 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Environment.mp4 --fullscreen vlc://quit
  Stimulation 20 = OVTK_StimulationId_Label_44
  Command 20 = cd "C:\Program Files\VideoLAN\VLC" && vlc C:\stims\mouth\Ambassador.mp4 --fullscreen vlc://quit
#0 -> Sound Player "date"
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/date.wav
  Loop = false
#0 -> Sound Player "goose"
  PLAY trigger = OVTK_StimulationId_Label_02
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Goose.wav
  Loop = false
#0 -> Sound Player "spruce"
  PLAY trigger = OVTK_StimulationId_Label_03
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Spruce.wav
  Loop = false
#0 -> Sound Player "knight"
  PLAY trigger = OVTK_StimulationId_Label_04
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Knight.wav
  Loop = false
#0 -> Sound Player "juice"
  PLAY trigger = OVTK_StimulationId_Label_05
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Juice.wav
  Loop = false
#0 -> Sound Player "moose"
  PLAY trigger = OVTK_StimulationId_Label_06
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Moose.wav
  Loop = false
#0 -> Sound Player "night"
  PLAY trigger = OVTK_StimulationId_Label_07
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Night.wav
  Loop = false
#0 -> Sound Player "queen"
  PLAY trigger = OVTK_StimulationId_Label_08
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Queen.wav
  Loop = false
#0 -> Sound Player "berry"
  PLAY trigger = OVTK_StimulationId_Label_09
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Berry.wav
  Loop = false
#0 -> Sound Player "hedgehog"
  PLAY trigger = OVTK_StimulationId_Label_0A
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Hedgehog.wav
  Loop = false
#0 -> Sound Player "water"
  PLAY trigger = OVTK_StimulationId_Label_0B
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Water.wav
  Loop = false
#0 -> Sound Player "daughter"
  PLAY trigger = OVTK_StimulationId_Label_0C
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Daughter.wav
  Loop = false
#0 -> Sound Player "gooseberry"
  PLAY trigger = OVTK_StimulationId_Label_0D
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Gooseberry.wav
  Loop = false
#0 -> Sound Player "waterfowl"
  PLAY trigger = OVTK_StimulationId_Label_0E
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Waterfowl.wav
  Loop = false
#0 -> Sound Player "wilderness"
  PLAY trigger = OVTK_StimulationId_Label_0F
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Wilderness.wav
  Loop = false
#0 -> Sound Player "relative"
  PLAY trigger = OVTK_StimulationId_Label_10
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Relative.wav
  Loop = false
#0 -> Sound Player "watermelon"
  PLAY trigger = OVTK_StimulationId_Label_11
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Watermelon.wav
  Loop = false
#0 -> Sound Player "caterpillar"
  PLAY trigger = OVTK_StimulationId_Label_12
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Caterpillar.wav
  Loop = false
#0 -> Sound Player "environment"
  PLAY trigger = OVTK_StimulationId_Label_13
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Environment.wav
  Loop = false
#0 -> Sound Player "ambassador"
  PLAY trigger = OVTK_StimulationId_Label_14
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/Ambassador.wav
  Loop = false
Acquisition client => #23
  Acquisition server hostname = localhost
  Acquisition server port = 1024
#23.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input signal=#23.Signal stream, Input stimulations=#0 -> Stimulation based epoching "phoneme stimuli" => #25
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_00
Input stream=#25 -> CSV File Writer
  Filename = C:/stims/experiments/stimuli.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#23.Signal stream, Input stimulations=#0 -> Stimulation based epoching "imagined speech" => #27
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Feedback_Discrete
Input stream=#27 -> CSV File Writer
  Filename = C:/stims/experiments/imagined_speech.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#23.Signal stream, Input stimulations=#0 -> Stimulation based epoching "inner speech" => #29
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Feedback_Continuous
Input stream=#29 -> CSV File Writer
  Filename = C:/stims/experiments/inner_speech.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#23.Signal stream, Input stimulations=#0 -> Stimulation based epoching "rest" => #31
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_RestStart
Input stream=#31 -> CSV File Writer
  Filename = C:/stims/experiments/resting.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#23.Signal stream, Input stimulations=#0 -> Stimulation based epoching "break" => #33
  Epoch duration (in sec) = 0.5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Beep
Input stream=#33 -> CSV File Writer
  Filename = C:/stims/experiments/breaks.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#23.Signal stream, Input stimulations=#0 -> Stimulation based epoching "mouth move" => #35
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Tongue
Input stream=#35 -> CSV File Writer
  Filename = C:/stims/experiments/visual_mouth.csv
  Precision = 10
  Append data = false
  Only last matrix = false
